<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.DelphiController;assembly=AllenNeuralDynamics.DelphiController"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>Commands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Enabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM3</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateFSMStatePayload">
          <p1:FSMState>0</p1:FSMState>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateEnableValveLedsPayload">
          <p1:EnableValveLeds>1</p1:EnableValveLeds>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="MinimumPokeTimeUS" />
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateMinimumPokeTimeUSPayload">
          <p1:MinimumPokeTimeUS>50000</p1:MinimumPokeTimeUS>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="MinOdorDeliveryTimeUS" />
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateMinOdorDeliveryTimeUSPayload">
          <p1:MinOdorDeliveryTimeUS>500000</p1:MinOdorDeliveryTimeUS>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="MaxOdorDeliveryTimeUS" />
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateMaxOdorDeliveryTimeUSPayload">
          <p1:MaxOdorDeliveryTimeUS>4000000</p1:MaxOdorDeliveryTimeUS>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PokePin" />
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreatePokePinPayload">
          <p1:PokePin>22</p1:PokePin>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PokePinInverted" />
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreatePokePinInvertedPayload">
          <p1:PokePinInverted>1</p1:PokePinInverted>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="HitDuty" />
        <Property Name="HoldDuty" />
        <Property Name="HitDurationMicroseconds" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:CreateValveConfig">
          <p2:HitDuty>1</p2:HitDuty>
          <p2:HoldDuty>0.5</p2:HoldDuty>
          <p2:HitDurationMicroseconds>100000</p2:HitDurationMicroseconds>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ValveConfig0" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateValveConfig0Payload">
          <p1:ValveConfig0>AACAPwAAAD+ghgEA</p1:ValveConfig0>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ValveConfig1" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateValveConfig1Payload">
          <p1:ValveConfig1>AACAPwAAAD+ghgEA</p1:ValveConfig1>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ValveConfig2" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateValveConfig2Payload">
          <p1:ValveConfig2>AACAPwAAAD+ghgEA</p1:ValveConfig2>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ValveConfig3" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateValveConfig3Payload">
          <p1:ValveConfig3>AACAPwAAAD+ghgEA</p1:ValveConfig3>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ValveConfig4" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateValveConfig4Payload">
          <p1:ValveConfig4>AACAPwAAAD+ghgEA</p1:ValveConfig4>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="OdorTransitionTimeUS" />
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateOdorTransitionTimeUSPayload">
          <p1:OdorTransitionTimeUS>100000</p1:OdorTransitionTimeUS>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="VacuumSetupTimeUS" />
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateVacuumSetupTimeUSPayload">
          <p1:VacuumSetupTimeUS>100000</p1:VacuumSetupTimeUS>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FinalValveEnergizedTimeUS" />
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateFinalValveEnergizedTimeUSPayload">
          <p1:FinalValveEnergizedTimeUS>1000000</p1:FinalValveEnergizedTimeUS>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="QueuedOdorIndex" />
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateQueuedOdorIndexPayload">
          <p1:QueuedOdorIndex>0</p1:QueuedOdorIndex>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateFSMStatePayload">
          <p1:FSMState>1</p1:FSMState>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="p1:Parse">
        <harp:Register xsi:type="p1:QueuedOdorIndex" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:SByte">
                <Value>-1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="p1:Parse">
        <harp:Register xsi:type="p1:PokePinInverted" />
      </Expression>
      <Expression xsi:type="p1:Parse">
        <harp:Register xsi:type="p1:PokePin" />
      </Expression>
      <Expression xsi:type="p1:Parse">
        <harp:Register xsi:type="p1:RawPokeState" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateQueuedOdorIndexPayload">
          <p1:QueuedOdorIndex>0</p1:QueuedOdorIndex>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="p1:Parse">
        <harp:Register xsi:type="p1:PokeState" />
      </Expression>
      <Expression xsi:type="p1:Parse">
        <harp:Register xsi:type="p1:MinimumPokeTimeUS" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateQueuedOdorIndexPayload">
          <p1:QueuedOdorIndex>0</p1:QueuedOdorIndex>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="35" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="4" To="8" Label="Source1" />
      <Edge From="4" To="10" Label="Source1" />
      <Edge From="4" To="12" Label="Source1" />
      <Edge From="4" To="14" Label="Source1" />
      <Edge From="4" To="16" Label="Source1" />
      <Edge From="4" To="20" Label="Source1" />
      <Edge From="4" To="22" Label="Source2" />
      <Edge From="4" To="24" Label="Source2" />
      <Edge From="4" To="26" Label="Source1" />
      <Edge From="4" To="28" Label="Source1" />
      <Edge From="4" To="30" Label="Source1" />
      <Edge From="4" To="32" Label="Source1" />
      <Edge From="4" To="34" Label="Source1" />
      <Edge From="5" To="39" Label="Source1" />
      <Edge From="6" To="39" Label="Source2" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="39" Label="Source3" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="39" Label="Source4" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="39" Label="Source5" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="14" To="39" Label="Source6" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="39" Label="Source7" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="18" To="21" Label="Source1" />
      <Edge From="18" To="23" Label="Source1" />
      <Edge From="18" To="25" Label="Source1" />
      <Edge From="18" To="27" Label="Source1" />
      <Edge From="19" To="20" Label="Source2" />
      <Edge From="20" To="39" Label="Source8" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="39" Label="Source9" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="39" Label="Source10" />
      <Edge From="25" To="26" Label="Source2" />
      <Edge From="26" To="39" Label="Source11" />
      <Edge From="27" To="28" Label="Source2" />
      <Edge From="28" To="39" Label="Source12" />
      <Edge From="29" To="30" Label="Source2" />
      <Edge From="30" To="39" Label="Source13" />
      <Edge From="31" To="32" Label="Source2" />
      <Edge From="32" To="39" Label="Source14" />
      <Edge From="33" To="34" Label="Source2" />
      <Edge From="34" To="39" Label="Source15" />
      <Edge From="35" To="37" Label="Source1" />
      <Edge From="35" To="38" Label="Source1" />
      <Edge From="36" To="37" Label="Source2" />
      <Edge From="37" To="39" Label="Source16" />
      <Edge From="38" To="39" Label="Source17" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="41" To="45" Label="Source1" />
      <Edge From="41" To="46" Label="Source1" />
      <Edge From="41" To="47" Label="Source1" />
      <Edge From="41" To="52" Label="Source1" />
      <Edge From="41" To="53" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="55" To="56" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>