<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" DisplayName="TemplatePath" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitializeSettings</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:LoadSettings">
                <p1:Path>sessionTemplate1.yml</p1:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>StateDefinitions</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>StateDefinitions.Count</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>4</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ToDictionary">
              <rx:KeySelector>Name</rx:KeySelector>
              <rx:ElementSelector>TransitionsTo</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TransitionLookup</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>ShiftKey Space D0 P NumPad0 F1 Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>LoadSettings</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Path" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:LoadSettings" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton ShiftKey ControlKey Space Prior PageUp D0 D1 A P Q NumPad0 NumPad1 F1 F2 Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>LoadSettings</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Path" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:LoadSettings" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>RButton ShiftKey Menu Space Next PageDown D0 D2 B P R NumPad0 NumPad2 F1 F3 Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>LoadSettings</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Path" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:LoadSettings" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="10" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>OdorA</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT2S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>OdorA</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>OdorB</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT2S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>OdorB</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>OdorC</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT2S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>OdorC</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>DefaultState</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>DefaultState</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:ToDictionary">
        <rx:KeySelector>Item2</rx:KeySelector>
        <rx:ElementSelector>Item1</rx:ElementSelector>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>SubjectDictionary</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton A Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>OdorA</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BeginState</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
        <rx:Name>BeginState</rx:Name>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>CurrentState</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>SelectState</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>StateName</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SubjectDictionary</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StateName</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="StringProperty">
                <Value>OdorC</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>StateComplete</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TransitionLookup</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StateComplete</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StateName</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="StringProperty">
                <Value>OdorC</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="15" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BeginState</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
        <rx:Name>CurrentState</rx:Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="18" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="18" Label="Source2" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="18" Label="Source3" />
      <Edge From="14" To="16" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source4" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>