<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p2="clr-namespace:Harp.OutputExpander;assembly=Harp.OutputExpander"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:LoadSessionSettings">
          <p1:Path>DelphiSession.yml</p1:Path>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:SynchronizeTimestamp" />
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="harp:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="harp:CreateOperationControlPayload">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:MuteReplies>false</harp:MuteReplies>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:Heartbeat>Enabled</harp:Heartbeat>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DelaySubscription">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>HarpProperties.ComPort</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="PortName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>HarpProperties.ShowHarpLeds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:BooleanToLedState" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="VisualIndicators" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:Device">
          <harp:OperationMode>Standby</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>false</harp:DumpRegisters>
          <harp:VisualIndicators>Off</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM13</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="p2:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p2:CreateOutputSetPayload">
          <p2:OutputSet>Out0</p2:OutputSet>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="p2:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p2:CreateOutputSetPayload">
          <p2:OutputSet>Out1</p2:OutputSet>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.01S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="p2:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p2:CreateOutputClearPayload">
          <p2:OutputClear>Out0</p2:OutputClear>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="p2:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p2:CreateOutputClearPayload">
          <p2:OutputClear>Out1</p2:OutputClear>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="8" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="18" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="18" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source3" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>